PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = BINGO_NATO_Alphabet_Day2_v2
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $Words_Day2
    TextComponent text_6
      letterHeight = 0.05
      startVal [condition] = $text.status==FINISHED
      stopVal [duration (s)] = 0.33
      text = ...
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    TextComponent text_7
      letterHeight = 0.05
      startVal [condition] = $text_6.status==FINISHED
      stopVal [duration (s)] = 0.33
      text = ..
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    TextComponent text_8
      letterHeight = 0.05
      startVal [condition] = $text_7.status==FINISHED
      stopVal [duration (s)] = 0.33
      text = .
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    PolygonComponent fixationcross
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [condition] = $text_8.status==FINISHED
      stopVal [duration (s)] = 1.5
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    ImageComponent black_2
      image = black.jpg
      size = (0.5, 0.5)
      startVal [condition] = $fixationcross.status==FINISHED
      stopVal [duration (s)] = 1
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #startTime = imagesClock.getTime()
        #outlet.push_sample([startTime, my_id, time.time()])
        win.color = "black"

        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),Words_Day2, str(time.time())])
  Routine EO
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    PolygonComponent EO_cross
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "black"
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'EO', str(time.time())])
  Routine EC
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    TextComponent EC_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Close your Eyes!
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "black"
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'EC', str(time.time())])
  Routine Initialization_2
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import time
        from pylsl import StreamInfo, StreamOutlet
        # Set up LabStreamingLayer stream.
        info = StreamInfo(name='my_markers', type='Markers', channel_count=3,
                          channel_format='string', source_id='psycho_triggers')
        outlet = StreamOutlet(info)  # Broadcast the stream.
      Begin Routine:
        win.color = "black"
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'START', str(time.time())])
    DotsComponent dots_2
      coherence = 1.0
      color = -1.0000, 0.1059, 0.2314
      dir = 0.0
      dotLife = 20
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 10
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.0000000000001
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine Welcome
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    ImageComponent Brain_image
      image = brain-bg2-2060x1700.png
      pos = (0, 0.2)
      size = (0.6,0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      font = comic sans
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Welcome to BINGO's Experimental Session!
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    ImageComponent continue_button_2
      image = continue.png
      pos = (0, -.4)
      size = (0.65, .1)
      startVal [time (s)] = 2
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    MouseComponent mouse_3
      clickable = continue_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 2
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        win.color = "black"
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'Welcome', str(time.time())])
  Routine Repeat
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    TextComponent instructions_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = .9
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      text:
        If the task was completed succesfully, click on the Continue Button.

        If for any reason, the task was not executed properly and has to be repeated by the participant, click on the Repeat Button.
    ImageComponent continue_button_15
      image = mycontinue.png
      pos = (0.5, -.4)
      size = (0.3, .1)
      startVal [time (s)] = 1
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    ImageComponent repeat_button_3
      image = myrepeat.png
      pos = (-0.4, -.4)
      size = (0.3, .1)
      startVal [time (s)] = 1
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    MouseComponent mouse_17
      clickable = continue_button_15, repeat_button_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 1
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    CodeComponent code_34
      Code Type = Auto->JS
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      End Routine:
        if continue_button_15.contains(mouse_17):
            trials_r3.finished = True
  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        This is the end of the experiment.


        Thank you for your time.
    CodeComponent code_21
      Code Type = Auto->JS
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      End Routine:
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'EndOfExperiment', str(time.time())])
  Routine trial_GE
    RoutineSettingsComponent trial_GE
      disabled = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $Words_GE
    TextComponent countdown_2
      letterHeight = 0.05
      startVal [condition] = $text_3.status==FINISHED
      stopVal [duration (s)] = 2
      text [set every frame] = $str(4-int(t))
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    PolygonComponent fixationcross_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [condition] = $countdown_2.status==FINISHED
      stopVal [duration (s)] = 2.0
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    ImageComponent black_4
      image = black.jpg
      size = (0.5, 0.5)
      startVal [condition] = $fixationcross_2.status==FINISHED
      stopVal [duration (s)] = 1
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        #startTime = imagesClock.getTime()
        #outlet.push_sample([startTime, my_id, time.time()])
        win.color = "black"

        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),Words_GE, str(time.time())])
  Routine Exp_Init
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every frame]:
        $'Experiment Begins in\n\n' +str(10-int(t))
  Routine GraphEsthetic
    RoutineSettingsComponent GraphEsthetic
      disabled = True
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    PolygonComponent fixationcross_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    ImageComponent img_graph
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $Path_img
      size = (1, 0.7)
      startVal [condition] = $fixationcross_3.status==FINISHED
      stopVal [duration (s)] = 5
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "white"
  Routine Break
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    ImageComponent break_img
      image = break.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'Break', str(time.time())])
  Routine Experiment_Start
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    TextComponent text_5
      font = comic sans
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Inner Speech Familirization

        A series of exemplar trials will be presented to you, in order to familiarize with the experimental protocol and the corresponding inner speech task.

        When you are ready to begin the experiment, click the Continue button.
    ImageComponent continue_button
      image = continue.png
      pos = (0, -.4)
      size = (0.65, .1)
      startVal [time (s)] = 2
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    MouseComponent mouse
      clickable = continue_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 2
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        win.color = "black"
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'EXP_begin', str(time.time())])
  Routine Break2
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    ImageComponent Break_image_2
      image = break.jpg
      pos = (0, 0.2)
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
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    ImageComponent continue_button_3
      image = continue.png
      pos = (0, -.4)
      size = (0.65, .1)
      startVal [time (s)] = 2
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    MouseComponent mouse_4
      clickable = continue_button_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 2
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        win.color = "black"
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'Break', str(time.time())])
  Routine Exp_Init_2
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every frame]:
        $'Experiment Begins in\n\n' +str(10-int(t))
    CodeComponent code_10
      Code Type = Py
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      Begin Routine:
        startTime = routineTimer.getTime()
        outlet.push_sample([str(startTime),'EXP_trials', str(time.time())])
Flow
  Routine Initialization_2
  Routine Welcome
  Routine EO
  Routine EC
  Routine Experiment_Start
  Routine Exp_Init
  LoopInitiator trials_r3 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = 0, 35, 70, 105, 140
      conditionsFile = BINGO_words.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 1},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 2},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 3},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 4},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 5},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 6},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 7},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 8},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 9},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 10},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 11},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 12},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 13},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 14},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 15},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 16},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 17},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 18},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 19},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 20},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 21},
        {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 22}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
      Routine trial
    LoopTerminator trials_2
    Routine Repeat
  LoopTerminator trials_r3
  Routine Exp_Init_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BINGO_words_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 1},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 2},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 3},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 4},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 5},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 6},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 7},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 8},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 9},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 10},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 11},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 12},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 13},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 14},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 15},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 1},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 2},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 3},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 4},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 5},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 6},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 7},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 8}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
    Routine trial
  LoopTerminator trials
  Routine Break2
  Routine Exp_Init
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = BINGO_words_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 1},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 2},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 3},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 4},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 5},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 6},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 7},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 8},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 9},
      {'Words_Day1': 'Alpha', 'Words_Day2': 'November', 'Word_Count': 10},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 1},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 2},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 3},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 4},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 5},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 6},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 7},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 8},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 9},
      {'Words_Day1': 'Beta', 'Words_Day2': 'Oscar', 'Word_Count': 10},
      {'Words_Day1': 'Charlie', 'Words_Day2': 'Papa', 'Word_Count': 1},
      {'Words_Day1': 'Charlie', 'Words_Day2': 'Papa', 'Word_Count': 2},
      {'Words_Day1': 'Charlie', 'Words_Day2': 'Papa', 'Word_Count': 3}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
    Routine trial
  LoopTerminator trials_3
  Routine Break2
  Routine Exp_Init
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = BINGO_words_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_4
  LoopInitiator trials_GE loopType="TrialHandler"
    conditionsFile = BINGO_GREENG.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_GE': 'Κερί', 'Word_Count': 1},
      {'Words_GE': 'Κερί', 'Word_Count': 2},
      {'Words_GE': 'Κερί', 'Word_Count': 3},
      {'Words_GE': 'Κερί', 'Word_Count': 4},
      {'Words_GE': 'Κερί', 'Word_Count': 5},
      {'Words_GE': 'Κερί', 'Word_Count': 6},
      {'Words_GE': 'Κερί', 'Word_Count': 7},
      {'Words_GE': 'Κερί', 'Word_Count': 8},
      {'Words_GE': 'Κερί', 'Word_Count': 9},
      {'Words_GE': 'Κερί', 'Word_Count': 10},
      {'Words_GE': 'Κερί', 'Word_Count': 11},
      {'Words_GE': 'Κερί', 'Word_Count': 12},
      {'Words_GE': 'Κερί', 'Word_Count': 13},
      {'Words_GE': 'Κερί', 'Word_Count': 14},
      {'Words_GE': 'Κερί', 'Word_Count': 15},
      {'Words_GE': 'Κερί', 'Word_Count': 16},
      {'Words_GE': 'Κερί', 'Word_Count': 17},
      {'Words_GE': 'Κερί', 'Word_Count': 18},
      {'Words_GE': 'Κερί', 'Word_Count': 19},
      {'Words_GE': 'Κερί', 'Word_Count': 20},
      {'Words_GE': 'Candle', 'Word_Count': 1},
      {'Words_GE': 'Candle', 'Word_Count': 2},
      {'Words_GE': 'Candle', 'Word_Count': 3},
      {'Words_GE': 'Candle', 'Word_Count': 4},
      {'Words_GE': 'Candle', 'Word_Count': 5},
      {'Words_GE': 'Candle', 'Word_Count': 6},
      {'Words_GE': 'Candle', 'Word_Count': 7},
      {'Words_GE': 'Candle', 'Word_Count': 8},
      {'Words_GE': 'Candle', 'Word_Count': 9},
      {'Words_GE': 'Candle', 'Word_Count': 10},
      {'Words_GE': 'Candle', 'Word_Count': 11},
      {'Words_GE': 'Candle', 'Word_Count': 12},
      {'Words_GE': 'Candle', 'Word_Count': 13},
      {'Words_GE': 'Candle', 'Word_Count': 14},
      {'Words_GE': 'Candle', 'Word_Count': 15},
      {'Words_GE': 'Candle', 'Word_Count': 16},
      {'Words_GE': 'Candle', 'Word_Count': 17},
      {'Words_GE': 'Candle', 'Word_Count': 18}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
    Routine trial_GE
  LoopTerminator trials_GE
  LoopInitiator trials_graph loopType="TrialHandler"
    conditionsFile = graph_imgs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 1},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 2},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 3},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 4},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 5},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 6},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 7},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 8},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 9},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 10},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 11},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 12},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 13},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 14},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 15},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 16},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 17},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 18},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 19},
      {'Path_img': 'graph\\left.png', 'ID': 'left', 'Count': 20},
      {'Path_img': 'graph\\left_hand.png', 'ID': 'left_hand', 'Count': 1},
      {'Path_img': 'graph\\left_hand.png', 'ID': 'left_hand', 'Count': 2},
      {'Path_img': 'graph\\left_hand.png', 'ID': 'left_hand', 'Count': 3},
      {'Path_img': 'graph\\left_hand.png', 'ID': 'left_hand', 'Count': 4},
      {'Path_img': 'graph\\left_hand.png', 'ID': 'left_hand', 'Count': 5}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
    Routine GraphEsthetic
  LoopTerminator trials_graph
  Routine End
